OpenViBE-Scenario
Comment
  IMAGERY
Comment
  REST

Generic stream reader
  Filename = C:/Users/sec/Documents/bci/zaznamy/record-[2016.06.22-08.08.22]-sec-rest-4.ov
-> Identity
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display Rest
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #5
  Spectral components = Amplitude
#5.Amplitude -> Spectrum Average
  Considers zeros = false
-> Matrix Display Rest
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5.Amplitude -> Power spectrum display Rest
  Minimum frequency to display = 0
  Maximum frequency to display = 20

0xc67a01dc Generic stream reader
  Filename = C:/Users/sec/Documents/bci/zaznamy/record-[2016.06.22-08.15.15]-sec-imag-3.ov
-> Identity
-> Temporal filter => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#11 -> Signal display Imagery
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#11 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #14
  Spectral components = Amplitude
#14.Amplitude -> Spectrum Average
  Considers zeros = false
-> Matrix Display Imagery
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#14.Amplitude -> Power spectrum display Imagery
  Minimum frequency to display = 0
  Maximum frequency to display = 20
