OpenViBE-Scenario
Comment
  IMAGERY
Comment
  REST

0xc67a01dc Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #8
  Filename to load configuration from = C:/Users/sec/Documents/bci/zaznamy/magicclassifier.xml
#8.Hyperplane distance -> Simple DSP => #9
  Equation = x
-> Analog VRPN Server
  Peripheral name = openvibe-vrpn
#9 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#9 -> Level measure

Generic stream reader
  Filename = C:/Users/sec/Documents/bci/zaznamy/record-[2016.06.22-19.31.25]-og-rest.ov
-> Identity

Generic stream reader
  Filename = C:/Users/sec/Documents/bci/zaznamy/record-[2016.06.18-17.46.14]imagery.ov
-> Identity
