OpenViBE-Scenario
Comment
  REST
Comment
  IMAGERY

Generic stream reader
  Filename = C:/Users/sec/Documents/bci/zaznamy/record-[2016.06.22-19.31.25]-og-rest.ov
-> Identity
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #8
Generic stream reader
  Filename = C:/Users/sec/Documents/bci/zaznamy/record-[2016.06.22-19.34.45]-og-imag.ov
-> Identity
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Keyboard stimulator => #17
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Stimulations=#17, Features for class 1=#8, Features for class 2=#16 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Label_01
  Filename to save configuration to = C:/Users/sec/Documents/bci/zaznamy/ogclassifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_00
  Class 2 label = OVTK_StimulationId_Label_01
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
